// "Batch RGB Merge"
// Based on macro found here: http://rsb.info.nih.gov/ij/macros/Batch_RGB_Merge.txt
// Modified by Andrew and Deborah Setter on 1 March 2016

// Opens multiple sets of three separate color channels as
// an RGB stack or converts them to RGB images. File names
// ending in "d1", "d2" and "d0" are assumed to be red, green
// and blue channels respectively, but this can be changed in
// the dialog box.

// A sample image set, courtesy of Mikael Bjorklund, is available at:
//    http://rsb.info.nih.gov/ij/macros/images/DrosophilaCells.zip
// It consists of three images of Drosophila S2 cells,
// each with three channels (d0=blue, d1=red and d2=green  
// as indicated by the end of the filename. The staining is
// standard Hoechst, phalloidin, tubulin.

  Dialog.create("RGB Batch Convert");
  Dialog.addString("Red Suffix:", "R");
  Dialog.addString("Green Suffix:", "G");
  Dialog.addString("Blue Suffix:", "B");
  Dialog.addCheckbox("Open as Stack", true);
  Dialog.show();
  redSuffix = Dialog.getString() + ".";
  greenSuffix = Dialog.getString() + ".";
  blueSuffix = Dialog.getString() + ".";
  openAsStack = Dialog.getCheckbox();
  if (openAsStack)
      openImagesAsStack();
  else
      batchConvert();
  exit;

  function openImagesAsStack() {
      dir = getDirectory("Choose Source Directory ");
      list = getFileList(dir);
      setBatchMode(true);
      n = list.length;
      if ((n%3)!=0)
         exit("The number of files must be a multiple of 3");
      stack = 0;
      first = 0;
      for (i=0; i<n/3; i++) {
          showProgress(i+1, n/3);
          red="?"; green="?"; blue="?";
          for (j=first; j<first+3; j++) {
              if (indexOf(list[j], redSuffix)!=-1)
                  red = list[j];
              if (indexOf(list[j], greenSuffix)!=-1)
                  green = list[j];
              if (indexOf(list[j], blueSuffix)!=-1)
                  blue = list[j];
          }
          open(dir+red);
          open(dir+green);
          open(dir+blue);
          run("RGB Merge...", "red=["+red+"] green=["+green+"] blue=["+blue+"]");
          width=getWidth; height=getHeight;
          run("Copy");
          close();
          if (stack==0) {
              newImage("RGB Stack", "RGB Black", width, height, n/3);
              stack = getImageID;
          }
          selectImage(stack);
          setSlice(i+1);
          run("Paste");
          index = indexOf(red, redSuffix);
          name = substring(red, 0, index);
          setMetadata(name);
          first += 3;
      }
      setSlice(1);
      run("Select None");
      setBatchMode(false);
  }

  function batchConvert() {
      dir1 = getDirectory("Choose Source Directory ");
      dir2 = getDirectory("Choose Destination Directory ");
      list = getFileList(dir1);
      setBatchMode(true);
      n = list.length;
      if ((n%3)!=0)
         exit("The number of files must be a multiple of 3");
      stack = 0;
      first = 0;
      for (i=0; i<n/3; i++) {
          showProgress(i+1, n/3);
          red="?"; green="?"; blue="?";
          for (j=first; j<first+3; j++) {
              if (indexOf(list[j], redSuffix)!=-1)
                  red = list[j];
              if (indexOf(list[j], greenSuffix)!=-1)
                  green = list[j];
              if (indexOf(list[j], blueSuffix)!=-1)
                  blue = list[j];
          }
          open(dir1 +red);
          open(dir1 +green);
          open(dir1 +blue);
          run("RGB Merge...", "red=["+red+"] green=["+green+"] blue=["+blue+"]");
          index = indexOf(red, redSuffix);
          name = substring(red, 0, index);
          saveAs("tiff", dir2+name+"_merge");
		  
		  open(dir1 +red);
		  run("Red");
		  run("RGB Color");
		  saveAs("tiff", dir2+name+"_red");
		  
          open(dir1 +green);
		  run("Green");
		  run("RGB Color");
		  saveAs("tiff", dir2+name+"_green");
		  
          open(dir1 +blue);
		  run("Blue");
		  run("RGB Color");
		  saveAs("tiff", dir2+name+"_blue");
		  
		  
          first += 3;
      }
  }

